PsychoPy2experiment version="2022.2.4"
Settings
  Audio lib = pygame
  Experiment info = {'participant': '', 'session': '001', 'proid': '', 'studid': '', 'sessid': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['stim/problem_set_2.csv', 'stim/button_choose.png', 'stim/button_choose_pressed.png', 'stim/button_raw.xcf', 'stim/mouse_move.wav', 'stim/pains.csv', 'stim/problem_set.csv', 'stim/side_effects.csv']
  Screen = 1
  Units = height
  Window size (pixels) = [1080, 1920]
  color = $[1.000,1.000,1.000]
  expName = Affective Decision Making and Uncertainty
  exportHTML = manually
  keyboardBackend = ioHub
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Routines
  Routine choose
    CodeComponent handle_prerand
      Code Type = Both
      Begin JS Routine:
        a_where = Math.round(Math.random())
        if (a_where == 1) {
            a_where = "l"
            psychoJS.experiment.addData("a_shown", "l")
            problem = {"A": {"v_b": a_benefit_v, "p_b": Number.parseFloat(a_benefit_p), "v_se": a_side_effect_v, "p_se": Number.parseFloat(a_side_effect_p)}, "B": {"v_b": b_benefit_v, "p_b": Number.parseFloat(b_benefit_p),
            "v_se": b_side_effect_v, "p_se": Number.parseFloat(b_side_effect_p)}};
            } else {
            a_where = "r"
            psychoJS.experiment.addData("a_shown", "r")
            problem = {"B": {"v_b": a_benefit_v, "p_b": Number.parseFloat(a_benefit_p), "v_se": a_side_effect_v, "p_se": Number.parseFloat(a_side_effect_p)}, "A": {"v_b": b_benefit_v, "p_b": Number.parseFloat(b_benefit_p), "v_se": b_side_effect_v,
            "p_se": Number.parseFloat(b_side_effect_p)}};
                }
      Begin Routine:
        a_where = random.choice(["l", "r"])
        thisExp.addData("a_shown", a_where)

        if a_where == "l":
            problem = {
            "A": {
            "v_b": a_benefit_v, "p_b": float(a_benefit_p),
            "v_se": a_side_effect_v, "p_se": float(a_side_effect_p)
            },
            "B": {
            "v_b": b_benefit_v, "p_b": float(b_benefit_p),
            "v_se": b_side_effect_v, "p_se": float(b_side_effect_p)
            }
            }
        else:
            problem = {
            "B": {
            "v_b": a_benefit_v, "p_b": float(a_benefit_p),
            "v_se": a_side_effect_v, "p_se": float(a_side_effect_p)
            },
            "A": {
            "v_b": b_benefit_v, "p_b": float(b_benefit_p),
            "v_se": b_side_effect_v, "p_se": float(b_side_effect_p)
            }
            }
      Each Frame:
        if a_where == "l":
            problem = {
            "A": {
            "v_b": a_benefit_v, "p_b": float(a_benefit_p),
            "v_se": a_side_effect_v, "p_se": float(a_side_effect_p)
            },
            "B": {
            "v_b": b_benefit_v, "p_b": float(b_benefit_p),
            "v_se": b_side_effect_v, "p_se": float(b_side_effect_p)
            }
            }
        else:
            problem = {
            "B": {
            "v_b": a_benefit_v, "p_b": float(a_benefit_p),
            "v_se": a_side_effect_v, "p_se": float(a_side_effect_p)
            },
            "A": {
            "v_b": b_benefit_v, "p_b": float(b_benefit_p),
            "v_se": b_side_effect_v, "p_se": float(b_side_effect_p)
            }
            }
      Each JS Frame:
        if (a_where == 1) {
            a_where = "l"
            problem = {"A": {"v_b": a_benefit_v, "p_b": Number.parseFloat(a_benefit_p), "v_se": a_side_effect_v, "p_se": Number.parseFloat(a_side_effect_p)}, "B": {"v_b": b_benefit_v, "p_b": Number.parseFloat(b_benefit_p),
            "v_se": b_side_effect_v, "p_se": Number.parseFloat(b_side_effect_p)}};
            } else {
            a_where = "r"
            problem = {"B": {"v_b": a_benefit_v, "p_b": Number.parseFloat(a_benefit_p), "v_se": a_side_effect_v, "p_se": Number.parseFloat(a_side_effect_p)}, "A": {"v_b": b_benefit_v, "p_b": Number.parseFloat(b_benefit_p), "v_se": b_side_effect_v,
            "p_se": Number.parseFloat(b_side_effect_p)}};
                }
    PolygonComponent descr_med_a_box
      fillColor = $[1.000,1.000,1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 2
      pos = (-.35, 0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.45, 0.25)
      startVal [time (s)] = 0.0
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    PolygonComponent descr_med_b_box
      fillColor = $[1.000,1.000,1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 2
      pos = (0.35, 0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.45, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent descr_label_b
      color = black
      letterHeight = 0.03
      pos = (0.35, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Medikament B
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    TextComponent descr_text_med_b
      color = black
      letterHeight = 0.02
      pos = (.35, .07)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Behandlungswahrscheinlichkeit:" + " " + str(round(problem["B"]["p_b"]*100,2)) + "%\n\n" + "Nebenwirkung:\n" + str(problem["B"]["v_se"]) +" " + str(round(problem["B"]["p_se"] * 100,2)) + "%"
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    TextComponent descr_label_a
      color = black
      letterHeight = 0.03
      pos = (-0.35, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Medikament A
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    TextComponent descr_text_med_a
      color = black
      letterHeight = 0.02
      pos = (-0.35, .07)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Behandlungswahrscheinlichkeit:" + " " + str(round(problem["A"]["p_b"]*100,3)) + "%\n\n" + "Nebenwirkung:\n" + str(problem["A"]["v_se"]) +" " + str(round(problem["A"]["p_se"] * 100,3)) + "%" 
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    CodeComponent justify_text
      Code Type = Both
      Begin Experiment:
        descr_text_med_a.alignText = "left"
        descr_text_med_b.alignText = "left"
        #comment
      Begin JS Experiment:
        descr_text_med_a.alignHoriz  = "left";
        descr_text_med_b.alignHoriz  = "left";
        //comment
    ImageComponent descr_choose_a
      image = stim/button_choose.png
      pos = (-.35, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent descr_choose_b
      image = stim/button_choose.png
      pos = (.35, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    MouseComponent descr_answer_mouse
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent answer_logic
      Code Type = Both
      Begin JS Routine:
        has_been_clicked_A = false;
        is_clicked = false;
        has_been_clicked_B = false;
        response_timer = new util.Clock();
        response_timer.reset();







        psychoJS.experiment.addData("A_v_b", a_benefit_v);
        psychoJS.experiment.addData("B_v_b", b_benefit_v);
        psychoJS.experiment.addData("A_v_b_label", a_benefit_v);
        psychoJS.experiment.addData("B_v_b_label", b_benefit_v);
        psychoJS.experiment.addData("A_p_b", a_benefit_p);
        psychoJS.experiment.addData("B_p_b", b_benefit_p);
        psychoJS.experiment.addData("A_v_se", a_side_effect_v);
        psychoJS.experiment.addData("B_v_se", b_side_effect_v);
        psychoJS.experiment.addData("A_v_se_label", a_side_effect_v);
        psychoJS.experiment.addData("B_v_se_label", b_side_effect_v);
        psychoJS.experiment.addData("A_p_se", a_side_effect_p);
        psychoJS.experiment.addData("B_p_se", b_side_effect_p);
      Begin Routine:
        has_been_clicked_A = False
        is_clicked = False
        has_been_clicked_B = False


        response_timer = core.Clock()
        response_timer.reset()



        thisExp.addData("A_v_b", a_benefit_v)
        thisExp.addData("B_v_b", b_benefit_v)

        thisExp.addData("A_v_b_label", a_benefit_v)
        thisExp.addData("B_v_b_label", b_benefit_v)

        thisExp.addData("A_p_b", a_benefit_p)
        thisExp.addData("B_p_b", b_benefit_p)


        thisExp.addData("A_v_se", a_side_effect_v)
        thisExp.addData("B_v_se", b_side_effect_v)

        thisExp.addData("A_v_se_label", a_side_effect_v)
        thisExp.addData("B_v_se_label", b_side_effect_v)


        thisExp.addData("A_p_se", a_side_effect_p)
        thisExp.addData("B_p_se", b_side_effect_p)
      Each Frame:
        if descr_answer_mouse.isPressedIn(descr_choose_a) and display_timer_desc.getTime() > interval:
            descr_choose_a.setImage("stim/button_choose_pressed.png")
            has_been_clicked_A = True
        else:
            descr_choose_a.setImage("stim/button_choose.png")


        if descr_answer_mouse.isPressedIn(descr_choose_b) and display_timer_desc.getTime() > interval:
            descr_choose_b.setImage("stim/button_choose_pressed.png")
            has_been_clicked_B = True
        else:
            descr_choose_b.setImage("stim/button_choose.png")

        if descr_answer_mouse.isPressedIn(descr_choose_b) or descr_answer_mouse.isPressedIn(descr_choose_a):
            is_clicked=True
        else:
            is_clicked=False

        if has_been_clicked_A or has_been_clicked_B:
            if not is_clicked:
                continueRoutine=False
                rt_time = response_timer.getTime()
                if has_been_clicked_A:
                    thisExp.addData("choice", "left")
                elif has_been_clicked_B:
                    thisExp.addData("choice", "right")
      Each JS Frame:
        if (descr_answer_mouse.isPressedIn(descr_choose_a) && display_timer_desc.getTime() > interval) {
            descr_choose_a.setImage("stim/button_choose_pressed.png");
            has_been_clicked_A = true;
        } else {
            descr_choose_a.setImage("stim/button_choose.png");
        }
        if (descr_answer_mouse.isPressedIn(descr_choose_b) && display_timer_desc.getTime() > interval) {
            descr_choose_b.setImage("stim/button_choose_pressed.png");
            has_been_clicked_B = true;
        } else {
            descr_choose_b.setImage("stim/button_choose.png");
        }
        if ((descr_answer_mouse.isPressedIn(descr_choose_b) || descr_answer_mouse.isPressedIn(descr_choose_a))) {
            is_clicked = true;
        } else {
            is_clicked = false;
        }
        if ((has_been_clicked_A || has_been_clicked_B)) {
            if ((! is_clicked)) {
                continueRoutine = false;
                rt_time = response_timer.getTime();
                if (has_been_clicked_A) {
                    psychoJS.experiment.addData("choice", "left");
                } else {
                    if (has_been_clicked_B) {
                        psychoJS.experiment.addData("choice", "right");
                    }
                }
            }
        }
      End JS Routine:
        psychoJS.experiment.addData("answer_time_descr", rt_time);
      End Routine:
        thisExp.addData("answer_time_descr", rt_time)
    TextComponent label_treats
      color = black
      letterHeight = 0.04
      pos = (0, .31)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Behandelt: " + a_benefit_v
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    CodeComponent display_later_log
      Code Type = Both
      Begin JS Routine:
        display_timer_desc = new util.Clock();
        display_timer_desc.reset();
        descr_label_a.setAutoDraw(false);
        descr_label_b.setAutoDraw(false);
        descr_text_med_b.setAutoDraw(false);
        descr_text_med_a.setAutoDraw(false);
        descr_med_a_box.setAutoDraw(false);
        descr_med_b_box.setAutoDraw(false);
        descr_choose_a.setAutoDraw(false);
        descr_choose_b.setAutoDraw(false);
        interval = 1;
      Begin Routine:
        display_timer_desc = core.Clock()
        display_timer_desc.reset()



        descr_label_a.setAutoDraw(False)
        descr_label_b.setAutoDraw(False)
        descr_text_med_b.setAutoDraw(False)
        descr_text_med_a.setAutoDraw(False)
        descr_med_a_box.setAutoDraw(False)
        descr_med_b_box.setAutoDraw(False)
        descr_choose_a.setAutoDraw(False)
        descr_choose_b.setAutoDraw(False)

        interval = 1
      Each Frame:
        descr_label_a.setAutoDraw(False)
        descr_label_b.setAutoDraw(False)
        descr_text_med_b.setAutoDraw(False)
        descr_text_med_a.setAutoDraw(False)
        descr_med_a_box.setAutoDraw(False)
        descr_med_b_box.setAutoDraw(False)
        descr_choose_a.setAutoDraw(False)
        descr_choose_b.setAutoDraw(False)

        if display_timer_desc.getTime() > interval:
            descr_med_a_box.draw()
            descr_med_b_box.draw()
            descr_label_a.draw()
            descr_label_b.draw()
            descr_text_med_b.draw()
            descr_text_med_a.draw()
            descr_choose_a.draw()
            descr_choose_b.draw()
      Each JS Frame:
        descr_label_a.setAutoDraw(false);
        descr_label_b.setAutoDraw(false);
        descr_text_med_b.setAutoDraw(false);
        descr_text_med_a.setAutoDraw(false);
        descr_med_a_box.setAutoDraw(false);
        descr_med_b_box.setAutoDraw(false);
        descr_choose_a.setAutoDraw(false);
        descr_choose_b.setAutoDraw(false);
        if ((display_timer_desc.getTime() > interval)) {
            descr_label_a.draw();
            descr_label_b.draw();
            descr_text_med_b.draw();
            descr_text_med_a.draw();
            descr_med_a_box.draw();
            descr_med_b_box.draw();
            descr_choose_a.draw();
            descr_choose_b.draw();
        }
  Routine sampling
    PolygonComponent exp_med_a_box
      fillColor = $[1.000,1.000,1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 2
      pos = (-.35, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.45, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent exp_label_a
      color = black
      letterHeight = 0.03
      pos = (-0.35, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Medikament A
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    PolygonComponent exp_med_b_box
      fillColor = $[1.000,1.000,1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 2
      pos = (0.35, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.45, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent exp_label_b
      color = black
      letterHeight = 0.03
      pos = (0.35, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Medikament B
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    ImageComponent exp_button_choose_A
      image = stim/button_choose.png
      pos = (-0.35, -0.15)
      startVal [time (s)] = 0.0
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    ImageComponent exp_button_choose_B
      image = stim/button_choose.png
      pos = (0.35, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent exp_benefit_A
      color = green
      letterHeight = 0.03
      pos = (-0.35, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Erfolg: Kopfschmerzen
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    TextComponent exp_side_effect_A
      color = red
      letterHeight = 0.03
      pos = (-0.35, 0.15)
      startVal [time (s)] = 0.0
      text = Nebenwirkung: Fieber
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    TextComponent exp_benefit_B
      color = green
      letterHeight = 0.03
      pos = (0.35, 0.2)
      startVal [time (s)] = 0.0
      text = Erfolg: Kopfschmerzen
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    TextComponent exp_side_effect_B
      color = red
      letterHeight = 0.03
      pos = (0.35, 0.15)
      startVal [time (s)] = 0.0
      text = Nebenwirkung: Übelkeit
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    MouseComponent exp_click
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent click_logic
      Code Type = Both
      Begin Experiment:
        import random
        import json
        import re


        beep = sound.Sound('stim/mouse_move.wav', secs=0.00001, hamming=False)
      Begin JS Routine:
        is_clicked = false;
        is_clicked_sample_A = false;
        is_clicked_sample_B = false;
        is_clicked_choose_A = false;
        was_clicked_choose_A = false;
        is_clicked_choose_B = false;
        was_clicked_choose_B = false;
        play_sound = false;
        show_b = false;
        show_a = false;
        show_a_b = false;
        show_a_se = false;
        nothing_shown_a = false;
        show_b_b = false;
        show_b_se = false;
        nothing_shown_b = false;
        console.log(problem)
        console.log(a_benefit_v)
        console.log(a_side_effect_v)
        console.log(a_benefit_p)
        console.log(a_side_effect_p)
        a_where = Math.round(Math.random())
        if (a_where == 1) {
            a_where = "l"
            psychoJS.experiment.addData("a_shown", "l")
            problem = {"A": {"v_b": a_benefit_v, "p_b": Number.parseFloat(a_benefit_p), "v_se": a_side_effect_v, "p_se": Number.parseFloat(a_side_effect_p)},
            "B": {"v_b": b_benefit_v, "p_b": Number.parseFloat(b_benefit_p), "v_se": b_side_effect_v, "p_se": Number.parseFloat(b_side_effect_p)}};
            } else {
            a_where = "r"
            psychoJS.experiment.addData("a_shown", "r")
            problem = {"B": {"v_b": a_benefit_v, "p_b": Number.parseFloat(a_benefit_p), "v_se": a_side_effect_v, "p_se": Number.parseFloat(a_side_effect_p)}, "A": {"v_b": b_benefit_v, "p_b": Number.parseFloat(b_benefit_p),
            "v_se": b_side_effect_v, "p_se": Number.parseFloat(b_side_effect_p)}};
                }


        exp_benefit_A.setAutoDraw(false);
        exp_benefit_B.setAutoDraw(false);
        exp_side_effect_A.setAutoDraw(false);
        exp_side_effect_B.setAutoDraw(false);


        psychoJS.experiment.addData("A_v_b", a_benefit_v);
        psychoJS.experiment.addData("B_v_b", b_benefit_v);
        psychoJS.experiment.addData("A_v_b_label", a_benefit_v);
        psychoJS.experiment.addData("B_v_b_label", b_benefit_v);
        psychoJS.experiment.addData("A_p_b", a_benefit_p);
        psychoJS.experiment.addData("B_p_b", b_benefit_p);
        psychoJS.experiment.addData("A_v_se", a_side_effect_v);
        psychoJS.experiment.addData("B_v_se", b_side_effect_v);
        psychoJS.experiment.addData("A_v_se_label", a_side_effect_v);
        psychoJS.experiment.addData("B_v_se_label", b_side_effect_v);
        psychoJS.experiment.addData("A_p_se", a_side_effect_p);
        psychoJS.experiment.addData("B_p_se", b_side_effect_p);
        exp_benefit_A.setText(("Erfolg: " + problem["A"]["v_b"].toString()));
        exp_benefit_B.setText(("Erfolg: " + problem["B"]["v_b"].toString()));
        exp_side_effect_A.setText(("Nebenwirkung: " + problem["A"]["v_se"].toString()));
        exp_side_effect_B.setText(("Nebenwirkung: " + problem["B"]["v_se"].toString()));
        clicks = [];
        click_timer = new util.Clock();
        beep = new sound.Sound({
          win: psychoJS.window,
          value: "stim/mouse_move.wav",
          secs: 0.00001});


        last_click = 0
        cooldown = .5
        click_timer.reset()
      Begin Routine:
        is_clicked= False
        is_clicked_sample_A = False
        is_clicked_sample_B = False
        is_clicked_choose_A = False
        was_clicked_choose_A = False
        is_clicked_choose_B = False
        was_clicked_choose_B = False
        play_sound = False
        show_a_b = False
        show_a_se = False
        nothing_shown_a = False
        show_b_b = False
        show_b_se = False
        nothing_shown_b = False

        a_where = random.choice(["l", "r"])
        thisExp.addData("a_shown", a_where)

        if a_where == "l":
            problem = {
            "A": {
            "v_b": a_benefit_v, "p_b": float(a_benefit_p),
            "v_se": a_side_effect_v, "p_se": float(a_side_effect_p)
            },
            "B": {
            "v_b": b_benefit_v, "p_b": float(b_benefit_p),
            "v_se": b_side_effect_v, "p_se": float(b_side_effect_p)
            }
            }
        else:
            problem = {
            "B": {
            "v_b": a_benefit_v, "p_b": float(a_benefit_p),
            "v_se": a_side_effect_v, "p_se": float(a_side_effect_p)
            },
            "A": {
            "v_b": b_benefit_v, "p_b": float(b_benefit_p),
            "v_se": b_side_effect_v, "p_se": float(b_side_effect_p)
            }
            }


        thisExp.addData("A_v_b", a_benefit_v)
        thisExp.addData("B_v_b", b_benefit_v)

        thisExp.addData("A_v_b_label", a_benefit_v)
        thisExp.addData("B_v_b_label", b_benefit_v)

        thisExp.addData("A_p_b", a_benefit_p)
        thisExp.addData("B_p_b", b_benefit_p)


        thisExp.addData("A_v_se", a_side_effect_v)
        thisExp.addData("B_v_se", b_side_effect_v)

        thisExp.addData("A_v_se_label", a_side_effect_v)
        thisExp.addData("B_v_se_label", b_side_effect_v)


        thisExp.addData("A_p_se", a_side_effect_p)
        thisExp.addData("B_p_se", b_side_effect_p)

        show_b = False
        show_a = False

        exp_benefit_A.setText("Erfolg: " + str(problem["A"]["v_b"]))
        exp_benefit_B.setText("Erfolg: " + str(problem["B"]["v_b"]))
        exp_side_effect_A.setText("Nebenwirkung: " + str(problem["A"]["v_se"]))
        exp_side_effect_B.setText("Nebenwirkung: " + str(problem["B"]["v_se"]))

        clicks = []
        click_timer = core.Clock()


        last_click = 0
        cooldown = .5



        exp_benefit_A.setAutoDraw(False)
        exp_benefit_B.setAutoDraw(False)
        exp_side_effect_A.setAutoDraw(False)
        exp_side_effect_B.setAutoDraw(False)
      Each Frame:
        exp_benefit_A.setAutoDraw(False)
        exp_benefit_B.setAutoDraw(False)
        exp_side_effect_A.setAutoDraw(False)
        exp_side_effect_B.setAutoDraw(False)



        if exp_click.isPressedIn(exp_med_a_box) and click_timer.getTime() > last_click + cooldown:
            exp_med_a_box.fillColor="grey"
            is_clicked_sample_A = True
            is_clicked = True
            last_click = click_timer.getTime()
        else:
            exp_med_a_box.fillColor="white"
            is_clicked = False


        if exp_click.isPressedIn(exp_med_b_box) and click_timer.getTime() > last_click + cooldown:
            exp_med_b_box.fillColor="grey"
            is_clicked_sample_B = True
            is_clicked = True
            last_click = click_timer.getTime()
        else:
            exp_med_b_box.fillColor="white"
            is_clicked = False


        if exp_click.isPressedIn(exp_button_choose_A) and click_timer.getTime() > last_click + cooldown and start_draw_clock.getTime() > interval_to_start_drawing:
            exp_button_choose_A.setImage("stim/button_choose_pressed.png")
            is_clicked = True
            is_clicked_choose_A = True
            was_clicked_choose_A =  True
            last_click = click_timer.getTime()
        else:
            exp_button_choose_A.setImage("stim/button_choose.png")
            is_clicked = False
            is_clicked_choose_A= False

        if exp_click.isPressedIn(exp_button_choose_B) and click_timer.getTime() > last_click + cooldown and start_draw_clock.getTime() > interval_to_start_drawing:
            exp_button_choose_B.setImage("stim/button_choose_pressed.png")
            is_clicked = True
            is_clicked_choose_B = True
            was_clicked_choose_B = True
            last_click = click_timer.getTime()
        else:
            exp_button_choose_B.setImage("stim/button_choose.png")
            is_clicked = False
            is_clicked_choose_B = False



        # handle_sampling A
        if is_clicked_sample_A and not is_clicked and not exp_click.isPressedIn(exp_med_a_box):
            show_a_b = random.random() < problem["A"]["p_b"]
            show_a_se = random.random() < problem["A"]["p_se"]

            if not show_a_b:
                exp_benefit_A.setText("Keine erfolgreiche Behandlung")
                exp_benefit_A.color = "black"
            else:
                exp_benefit_A.setText("Behandlung erfolgreich")
                exp_benefit_A.color = "green"



            if not show_a_se:
                exp_side_effect_A.setText("Keine Nebenwirkung")
                exp_side_effect_A.color = "black"
            else:
                exp_side_effect_A.setText("Nebenwirkung: " + str(problem["A"]["v_se"]))
                exp_side_effect_A.color = "red"

            show_b = False
            show_a = True
            show_b_b = False
            show_b_se = False
            nothing_shown_b = False
            is_clicked_sample_A = False
            restart_anim = True
            is_anim = True
            play_sound = True
            clicks.append({"which": "left", "time": click_timer.getTime(),
            "se_shown": show_a_se, "b_shown": show_a_b})


        # handle_sampling B
        if is_clicked_sample_B and not is_clicked and not exp_click.isPressedIn(exp_med_b_box):
            show_b_b = random.random() < problem["B"]["p_b"]
            show_b_se = random.random() < problem["B"]["p_se"]


            if not show_b_b:
                exp_benefit_B.setText("Keine erfolgreiche Behandlung")
                exp_benefit_B.color = "black"
            else:
                exp_benefit_B.setText("Behandlung erfolgreich")
                exp_benefit_B.color = "green"

            if not show_b_se:
                exp_side_effect_B.setText("Keine Nebenwirkung")
                exp_side_effect_B.color = "black"
            else:
                exp_side_effect_B.setText("Nebenwirkung: " + str(problem["B"]["v_se"]))
                exp_side_effect_B.color = "red"



            show_b = True
            show_a = False
            show_a_b = False
            show_a_se = False
            nothing_shown_a = False
            is_clicked_sample_B = False
            restart_anim = True
            is_anim = True
            play_sound = True
            clicks.append({"which": "right", "time": click_timer.getTime(),
            "se_shown": show_b_se, "b_shown": show_b_b})


        if play_sound:
            beep.play()
            play_sound = False

        if show_a:
            exp_benefit_A.draw()
            exp_side_effect_A.draw()

        if show_b:
            exp_benefit_B.draw()
            exp_side_effect_B.draw()




        if was_clicked_choose_A and not is_clicked_choose_A and not is_clicked:
            continueRoutine=False
            thisExp.addData("chosen_exp", "left")

        if was_clicked_choose_B and not is_clicked_choose_B and not is_clicked:
            continueRoutine=False
            thisExp.addData("chosen_exp", "right")
      Each JS Frame:
        exp_benefit_A.setAutoDraw(false);
        exp_benefit_B.setAutoDraw(false);
        exp_side_effect_A.setAutoDraw(false);
        exp_side_effect_B.setAutoDraw(false);

        if (exp_click.isPressedIn(exp_med_a_box) && click_timer.getTime() > last_click + cooldown) {
            exp_med_a_box.fillColor = "grey";
            is_clicked_sample_A = true;
            is_clicked = true;
        } else {
            exp_med_a_box.fillColor = "white";
            is_clicked = false;
        }
        if (exp_click.isPressedIn(exp_med_b_box) && click_timer.getTime() > last_click + cooldown) {
            exp_med_b_box.fillColor = "grey";
            is_clicked_sample_B = true;
            is_clicked = true;
        } else {
            exp_med_b_box.fillColor = "white";
            is_clicked = false;
        }
        if (exp_click.isPressedIn(exp_button_choose_A) && click_timer.getTime() > last_click + cooldown && start_draw_clock.getTime() > interval_to_start_drawing) {
            exp_button_choose_A.setImage("stim/button_choose_pressed.png");
            is_clicked = true;
            is_clicked_choose_A = true;
            was_clicked_choose_A = true;
        } else {
            exp_button_choose_A.setImage("stim/button_choose.png");
            is_clicked = false;
            is_clicked_choose_A = false;
        }
        if (exp_click.isPressedIn(exp_button_choose_B) && click_timer.getTime() > last_click + cooldown && start_draw_clock.getTime() > interval_to_start_drawing) {
            exp_button_choose_B.setImage("stim/button_choose_pressed.png");
            is_clicked = true;
            is_clicked_choose_B = true;
            was_clicked_choose_B = true;
        } else {
            exp_button_choose_B.setImage("stim/button_choose.png");
            is_clicked = false;
            is_clicked_choose_B = false;
        }


        if (exp_click.isPressedIn(exp_med_a_box) || exp_click.isPressedIn(exp_med_b_box) || exp_click.isPressedIn(exp_button_choose_A) || exp_click.isPressedIn(exp_button_choose_B) ) {

            is_clicked = true
            } else {
                is_clicked = false
                }



        if (((is_clicked_sample_A && (! is_clicked)) && (! exp_click.isPressedIn(exp_med_a_box)))) {
            show_a_b = (Math.random() < problem["A"]["p_b"]);
            show_a_se = (Math.random() < problem["A"]["p_se"]);
            last_click = click_timer.getTime()

            if (!show_a_b) {

                exp_benefit_A.setText("Keine erfolgreiche Behandlung")
                exp_benefit_A.color = "black"

                 } else {

                exp_benefit_A.setText("Behandlung erfolgreich")
                exp_benefit_A.color = "green"

                    }

            if (!show_a_se) {
                exp_side_effect_A.setText("Keine Nebenwirkung")
                exp_side_effect_A.color = "black"
                } else {
                exp_side_effect_A.setText(("Nebenwirkung: " + problem["A"]["v_se"].toString()))
                exp_side_effect_A.color = "red"
                    }

            show_b = false
            show_a = true
            show_b_b = false;
            show_b_se = false;
            nothing_shown_b = false;
            is_clicked_sample_A = false;
            restart_anim = true;
            is_anim = true;
            play_sound = true;
            clicks.push({"which": "left", "time": click_timer.getTime(), "se_shown": show_a_se, "b_shown": show_a_b});
        }
        if (((is_clicked_sample_B && (! is_clicked)) && (! exp_click.isPressedIn(exp_med_b_box)))) {
            show_b_b = (Math.random() < problem["B"]["p_b"]);
            show_b_se = (Math.random() < problem["B"]["p_se"]);



            last_click = click_timer.getTime()



            if (!show_b_b) {

                exp_benefit_B.setText("Keine erfolgreiche Behandlung")
                exp_benefit_B.color = "black"

                 } else {

                exp_benefit_B.setText("Behandlung erfolgreich")
                exp_benefit_B.color = "green"

                    }

            if (!show_b_se) {
                exp_side_effect_B.setText("Keine Nebenwirkung")
                exp_side_effect_B.color = "black"
                } else {
                exp_side_effect_B.setText(("Nebenwirkung: " + problem["B"]["v_se"].toString()))
                exp_side_effect_B.color = "red"
                    }



            show_b = true
            show_a = false
            show_a_b = false;
            show_a_se = false;
            nothing_shown_a = false;
            is_clicked_sample_B = false;
            restart_anim = true;
            is_anim = true;
            play_sound = true;
            clicks.push({"which": "right", "time": click_timer.getTime(), "se_shown": show_b_se, "b_shown": show_b_b});
        }
        if (play_sound) {
            beep.play(0);
            play_sound = false;
        }
        if (show_a) {
            exp_benefit_A.draw();
            exp_side_effect_A.draw();
        }

        if (show_b) {
            exp_benefit_B.draw();
            exp_side_effect_B.draw();
        }




        if (((was_clicked_choose_A && (! is_clicked_choose_A)) && (! is_clicked))) {
            continueRoutine = false;
            psychoJS.experiment.addData("chosen_exp", "left");
        }
        if (((was_clicked_choose_B && (! is_clicked_choose_B)) && (! is_clicked))) {
            continueRoutine = false;
            psychoJS.experiment.addData("chosen_exp", "right");
        }
      End JS Routine:
        clicks = JSON.stringify(clicks)
        clicks = clicks.replace(/["]/g, "'")
        psychoJS.experiment.addData("sampling_history", clicks);
        click_timer.reset()
      End Routine:
        clicks = json.dumps(clicks)
        clicks = re.sub('"', "'", clicks)
        thisExp.addData("sampling_history", clicks)
    CodeComponent anim
      Code Type = Both
      Begin JS Routine:
        is_anim = false;
        restart_anim = false;
        opacity_min_max = [0, 1];
        opacity_step_size = 3;
        pos_step_size = 2;
        benefit_pos_min_max = [0.15, 0.2];
        side_effect_pos_min_max = [0.1, 0.15];
        a_b_mm = [(- 0.35), benefit_pos_min_max[0]];
        b_b_mm = [0.35, benefit_pos_min_max[0]];
        a_se_mm = [(- 0.35), side_effect_pos_min_max[0]];
        b_se_mm = [0.35, side_effect_pos_min_max[0]];
        anim_clock = new util.Clock();
        last_time = 0;
      Begin Routine:
        is_anim = False
        restart_anim = False

        opacity_min_max = [0, 1]
        opacity_step_size = 3

        pos_step_size = 2
        benefit_pos_min_max = [.15, .2]
        side_effect_pos_min_max = [.10, .15]

        a_b_mm = [-0.35, benefit_pos_min_max[0]]
        b_b_mm = [0.35, benefit_pos_min_max[0]]
        a_se_mm = [-0.35, side_effect_pos_min_max[0]]
        b_se_mm = [0.35, side_effect_pos_min_max[0]]


        anim_clock = core.Clock()


        last_time = 0
      Each Frame:
        if restart_anim:
            exp_benefit_A.setPos((-0.35, .15))
            exp_benefit_B.pos = (0.35, .15)
            exp_side_effect_A.pos = (-0.35, 0.1)
            exp_side_effect_B.pos = (0.35, 0.1)
            restart_anim = False
            exp_benefit_A.setOpacity(.2)
            exp_benefit_B.setOpacity(.2)
            exp_side_effect_A.setOpacity(.2)
            exp_side_effect_B.setOpacity(.2)
            last_time = 0
            anim_clock.reset()


        if not restart_anim:
            current_b_a = exp_benefit_A.pos
            current_b_b = exp_benefit_B.pos
            current_se_a = exp_side_effect_A.pos
            current_se_b = exp_side_effect_B.pos

            now_time = anim_clock.getTime()
            time_delta = now_time - last_time
            last_time = now_time

            exp_benefit_A.pos = [-0.35, current_b_a[1] + pos_step_size * time_delta]
            exp_benefit_B.pos = [0.35, current_b_b[1] + pos_step_size * time_delta]
            exp_side_effect_A.pos = [-0.35, current_se_a[1] + pos_step_size * time_delta]
            exp_side_effect_B.pos = [0.35, current_se_b[1] + pos_step_size * time_delta]

            op = exp_benefit_A.opacity
            if op > 1: op = 1;
            exp_benefit_A.setOpacity(op + opacity_step_size * time_delta)
            exp_benefit_B.setOpacity(op + opacity_step_size * time_delta)
            exp_side_effect_A.setOpacity(op + opacity_step_size * time_delta)
            exp_side_effect_B.setOpacity(op + opacity_step_size * time_delta)


            if exp_benefit_A.pos[1] > .2:
                exp_benefit_A.pos = [-0.35, .2]
            if exp_benefit_B.pos[1] > .2:
                exp_benefit_B.pos = [0.35, .2]
            if exp_side_effect_A.pos[1] > .15:
                exp_side_effect_A.pos = [-0.35, .15]
            if exp_side_effect_B.pos[1] > .15:
                exp_side_effect_B.pos = [0.35, .15]
      Each JS Frame:
        if (restart_anim) {
            exp_benefit_A.setPos([(- 0.35), 0.15]);
            exp_benefit_B.pos = [0.35, 0.15];
            exp_side_effect_A.pos = [(- 0.35), 0.1];
            exp_side_effect_B.pos = [0.35, 0.1];
            restart_anim = false;
            exp_benefit_A.setOpacity(0.2);
            exp_benefit_B.setOpacity(0.2);
            exp_side_effect_A.setOpacity(0.2);
            exp_side_effect_B.setOpacity(0.2);
            last_time = 0;
            anim_clock.reset();
        }
        if ((! restart_anim)) {
            current_b_a = exp_benefit_A.pos;
            current_b_b = exp_benefit_B.pos;
            current_se_a = exp_side_effect_A.pos;
            current_se_b = exp_side_effect_B.pos;
            now_time = anim_clock.getTime();
            time_delta = (now_time - last_time);
            last_time = now_time;
            exp_benefit_A.pos = [(- 0.35), (current_b_a[1] + (pos_step_size * time_delta))];
            exp_benefit_B.pos = [0.35, (current_b_b[1] + (pos_step_size * time_delta))];
            exp_side_effect_A.pos = [(- 0.35), (current_se_a[1] + (pos_step_size * time_delta))];
            exp_side_effect_B.pos = [0.35, (current_se_b[1] + (pos_step_size * time_delta))];
            op = exp_benefit_A.opacity;
            if ((op > 1)) {
                op = 1;
            }
            exp_benefit_A.setOpacity((op + (opacity_step_size * time_delta)));
            exp_benefit_B.setOpacity((op + (opacity_step_size * time_delta)));
            exp_side_effect_A.setOpacity((op + (opacity_step_size * time_delta)));
            exp_side_effect_B.setOpacity((op + (opacity_step_size * time_delta)));
            if ((exp_benefit_A.pos[1] > 0.2)) {
                exp_benefit_A.pos = [(- 0.35), 0.2];
            }
            if ((exp_benefit_B.pos[1] > 0.2)) {
                exp_benefit_B.pos = [0.35, 0.2];
            }
            if ((exp_side_effect_A.pos[1] > 0.15)) {
                exp_side_effect_A.pos = [(- 0.35), 0.15];
            }
            if ((exp_side_effect_B.pos[1] > 0.15)) {
                exp_side_effect_B.pos = [0.35, 0.15];
            }
        }
    TextComponent label_what_treat
      color = black
      letterHeight = 0.04
      pos = (0, .31)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Behandelt: " + a_benefit_v
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    CodeComponent skip_helper
      Code Type = Auto->JS
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      Each Frame:
        if propagate:
            continueRoutine=False
    CodeComponent show_label_logic
      Code Type = Both
      Begin JS Routine:
        exp_med_a_box.setAutoDraw(false);
        exp_med_b_box.setAutoDraw(false);
        exp_label_a.setAutoDraw(false);
        exp_label_b.setAutoDraw(false);
        exp_button_choose_A.setAutoDraw(false);
        exp_button_choose_B.setAutoDraw(false);
        start_draw_clock = new util.Clock();
        interval_to_start_drawing = 1;
      Begin Routine:
        exp_med_a_box.setAutoDraw(False)
        exp_med_b_box.setAutoDraw(False)
        exp_label_a.setAutoDraw(False)
        exp_label_b.setAutoDraw(False)
        exp_button_choose_A.setAutoDraw(False)
        exp_button_choose_B.setAutoDraw(False)


        start_draw_clock = core.Clock()
        start_draw_clock.reset()
        interval_to_start_drawing = 1
      Each Frame:
        exp_med_a_box.setAutoDraw(False)
        exp_med_b_box.setAutoDraw(False)
        exp_label_a.setAutoDraw(False)
        exp_label_b.setAutoDraw(False)
        exp_button_choose_A.setAutoDraw(False)
        exp_button_choose_B.setAutoDraw(False)


        if start_draw_clock.getTime() > interval_to_start_drawing:
            exp_med_a_box.draw()
            exp_med_b_box.draw()
            exp_label_a.draw()
            exp_label_b.draw()
            exp_button_choose_A.draw()
            exp_button_choose_B.draw()
      Each JS Frame:
        exp_med_a_box.setAutoDraw(false);
        exp_med_b_box.setAutoDraw(false);
        exp_label_a.setAutoDraw(false);
        exp_label_b.setAutoDraw(false);
        exp_button_choose_A.setAutoDraw(false);
        exp_button_choose_B.setAutoDraw(false);
        if ((start_draw_clock.getTime() > interval_to_start_drawing)) {
            exp_med_a_box.draw();
            exp_med_b_box.draw();
            exp_label_a.draw();
            exp_label_b.draw();
            exp_button_choose_A.draw();
            exp_button_choose_B.draw();
        }
  Routine fix
    TextComponent fix_cross
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.35
      text = +
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  Routine rate_side_effects
    TextComponent side_effect
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $side_effect_text
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    TextComponent prompt
      color = black
      letterHeight = 0.015
      pos = (0, .2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Wie belastend wäre es für Sie, an folgender Nebenwirkung zu leiden:
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    SliderComponent rating_side_effect
      borderColor = black
      color = black
      forceEndRoutine = False
      granularity = 1
      labels = ["gar nicht belastend", "sehr belastend"]
      letterHeight = 0.015
      pos = (0, -0.1)
      size = (1.0, 0.06)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    TextComponent hint_contin
      color = black
      letterHeight = 0.02
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = weiter mit Leertaste
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    KeyboardComponent contin_se_rating
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent logic_answer_se_rating
      Code Type = Both
      Begin Experiment:
        all_side_effects = []
      Begin JS Experiment:
        all_side_effects = [];
      Each Frame:
        if continueRoutine == False and not rating_side_effect.getRating():
            continueRoutine = True
            contin_se_rating.clearEvents(eventType='keyboard')
            theseKeys = []
            _contin_se_rating_allKeys = []
      Each JS Frame:
        if (((continueRoutine === false) && (! rating_side_effect.getRating()))) {
            continueRoutine = true;
            contin_se_rating.clearEvents({"eventType": "keyboard"});
            theseKeys = [];
            _contin_se_rating_allKeys = [];
        }
      End JS Routine:
        all_side_effects.push({"se": side_effect_text, "rating": rating_side_effect.getRating()});
        psychoJS.experiment.addData("se", side_effect_text);
        psychoJS.experiment.addData("rating_se", rating_side_effect.getRating());
      End Routine:
        all_side_effects.append(
        {"se": side_effect_text, "rating": rating_side_effect.getRating()})

        thisExp.addData("se", side_effect_text)
        thisExp.addData("rating_se", rating_side_effect.getRating())
  Routine rate_illness
    TextComponent pain_text
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $combined_symptom
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    TextComponent prompt_pain
      color = black
      letterHeight = 0.015
      pos = (0, .2)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Wie belastend wäre es für Sie, an folgendem Schmerz zu leiden:
    SliderComponent rating_pain
      borderColor = black
      color = black
      forceEndRoutine = False
      granularity = 1
      labels = ["gar nicht belastend", "sehr belastend"]
      letterHeight = 0.015
      pos = (0, -0.1)
      size = (1.0, 0.06)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    TextComponent hint_contin_pain
      color = black
      letterHeight = 0.02
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = weiter mit Leertaste
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    KeyboardComponent contin_pain_rating
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent pain_rating_logic
      Code Type = Auto->JS
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      Begin Experiment:
        rated_pains = []
      End Routine:
        rated_pains.append(
        {"pain": combined_symptom, "rating": rating_pain.getRating()}
        )


        thisExp.addData("pain", combined_symptom)
        thisExp.addData("rating_pain", combined_symptom)
    CodeComponent logic_rating
      Code Type = Auto->JS
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      Each Frame:
        if continueRoutine == False and not rating_pain.getRating():
            continueRoutine = True
            contin_pain_rating.clearEvents(eventType='keyboard')
            theseKeys = []
            _contin_pain_rating_allKeys = []
  Routine prep
    CodeComponent prep_random_order
      Code Type = JS
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      Before JS Experiment:
        expName = 'Affektives Entscheidungsverhalten und Unsicherheit'
      Begin JS Routine:
        starts_with = Math.random() < 0.5 ? "desc" : "exp";

        psychoJS.experiment.addData("starts_with", starts_with);
    CodeComponent ttt
      Code Type = Auto->JS
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      Begin Routine:
        print(expInfo["studid"])
  Routine skip1
    CodeComponent skip1_logic
      Code Type = Auto->JS
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      Each Frame:
        if propagate:
            sample_trial_loop.finished=True
            continueRoutine= False
  Routine skip2
    CodeComponent skip2_logic
      Code Type = Auto->JS
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      Each Frame:
        if propagate:
            continueRoutine = False
            sample_trial_loop_2.finished = True
  Routine fix_2
  Routine fix2
  Routine interactive_sampl_1
    PolygonComponent exp_med_a_box_demo
      fillColor = $[1.000,1.000,1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 2
      pos = (-.35, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.45, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent exp_med_b_box_demo
      fillColor = $[1.000,1.000,1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 2
      pos = (0.35, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.45, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent exp_label_a_demo
      color = black
      letterHeight = 0.03
      pos = (-0.35, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Medikament A
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    TextComponent exp_label_b_demo
      color = black
      letterHeight = 0.03
      pos = (0.35, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Medikament B
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    TextComponent exp_benefit_A_demo
      color = green
      letterHeight = 0.03
      pos = (-0.35, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Erfolg: Kopfschmerzen
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    TextComponent exp_benefit_B_demo
      color = green
      letterHeight = 0.03
      pos = (0.35, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Erfolg: Kopfschmerzen
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    TextComponent exp_side_effect_A_demo
      color = red
      letterHeight = 0.03
      pos = (-0.35, 0.15)
      startVal [time (s)] = 0.0
      text = Nebenwirkung: Fieber
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    TextComponent exp_side_effect_B_demo
      color = red
      letterHeight = 0.03
      pos = (0.35, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Nebenwirkung: Übelkeit
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    ImageComponent exp_button_choose_A_demo
      image = stim/button_choose.png
      pos = (-0.35, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent exp_button_choose_B_demo
      image = stim/button_choose.png
      pos = (0.35, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    MouseComponent exp_click_demo
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent anim_demo
      Code Type = Both
      Begin JS Routine:
        is_anim = false;
        restart_anim = false;
        opacity_min_max = [0, 1];
        opacity_step_size = 3;
        pos_step_size = 2;
        benefit_pos_min_max = [0.15, 0.2];
        side_effect_pos_min_max = [0.1, 0.15];
        a_b_mm = [(- 0.35), benefit_pos_min_max[0]];
        b_b_mm = [0.35, benefit_pos_min_max[0]];
        a_se_mm = [(- 0.35), side_effect_pos_min_max[0]];
        b_se_mm = [0.35, side_effect_pos_min_max[0]];
        anim_clock = new util.Clock();
        last_time = 0;
      Begin Routine:
        is_anim = False
        restart_anim = False

        opacity_min_max = [0, 1]
        opacity_step_size = 3

        pos_step_size = 2
        benefit_pos_min_max = [.15, .2]
        side_effect_pos_min_max = [.10, .15]

        a_b_mm = [-0.35, benefit_pos_min_max[0]]
        b_b_mm = [0.35, benefit_pos_min_max[0]]
        a_se_mm = [-0.35, side_effect_pos_min_max[0]]
        b_se_mm = [0.35, side_effect_pos_min_max[0]]


        anim_clock = core.Clock()


        last_time = 0
      Each Frame:
        if propagate:
            continueRoutine = False
        if restart_anim:
            exp_benefit_A_demo.setPos((-0.35, .15))
            exp_benefit_B_demo.pos = (0.35, .15)
            exp_side_effect_A_demo.pos = (-0.35, 0.1)
            exp_side_effect_B_demo.pos = (0.35, 0.1)
            restart_anim = False
            exp_benefit_A_demo.setOpacity(.2)
            exp_benefit_B_demo.setOpacity(.2)
            exp_side_effect_A_demo.setOpacity(.2)
            exp_side_effect_B_demo.setOpacity(.2)
            last_time = 0
            anim_clock.reset()


        if not restart_anim:
            current_b_a = exp_benefit_A_demo.pos
            current_b_b = exp_benefit_B_demo.pos
            current_se_a = exp_side_effect_A_demo.pos
            current_se_b = exp_side_effect_B_demo.pos

            now_time = anim_clock.getTime()
            time_delta = now_time - last_time
            last_time = now_time

            exp_benefit_A_demo.pos = [-0.35, current_b_a[1] + pos_step_size * time_delta]
            exp_benefit_B_demo.pos = [0.35, current_b_b[1] + pos_step_size * time_delta]
            exp_side_effect_A_demo.pos = [-0.35, current_se_a[1] + pos_step_size * time_delta]
            exp_side_effect_B_demo.pos = [0.35, current_se_b[1] + pos_step_size * time_delta]

            op = exp_benefit_A_demo.opacity
            if op > 1: op = 1;
            exp_benefit_A_demo.setOpacity(op + opacity_step_size * time_delta)
            exp_benefit_B_demo.setOpacity(op + opacity_step_size * time_delta)
            exp_side_effect_A_demo.setOpacity(op + opacity_step_size * time_delta)
            exp_side_effect_B_demo.setOpacity(op + opacity_step_size * time_delta)


            if exp_benefit_A_demo.pos[1] > .2:
                exp_benefit_A_demo.pos = [-0.35, .2]
            if exp_benefit_B_demo.pos[1] > .2:
                exp_benefit_B_demo.pos = [0.35, .2]
            if exp_side_effect_A_demo.pos[1] > .15:
                exp_side_effect_A_demo.pos = [-0.35, .15]
            if exp_side_effect_B_demo.pos[1] > .15:
                exp_side_effect_B_demo.pos = [0.35, .15]
      Each JS Frame:
        if (propagate) {
            continueRoutine = false
            }



        if (restart_anim) {
            exp_benefit_A_demo.setPos([(- 0.35), 0.15]);
            exp_benefit_B_demo.pos = [0.35, 0.15];
            exp_side_effect_A_demo.pos = [(- 0.35), 0.1];
            exp_side_effect_B_demo.pos = [0.35, 0.1];
            restart_anim = false;
            exp_benefit_A_demo.setOpacity(0.2);
            exp_benefit_B_demo.setOpacity(0.2);
            exp_side_effect_A_demo.setOpacity(0.2);
            exp_side_effect_B_demo.setOpacity(0.2);
            last_time = 0;
            anim_clock.reset();
        }
        if ((! restart_anim)) {
            current_b_a = exp_benefit_A_demo.pos;
            current_b_b = exp_benefit_B_demo.pos;
            current_se_a = exp_side_effect_A_demo.pos;
            current_se_b = exp_side_effect_B_demo.pos;
            now_time = anim_clock.getTime();
            time_delta = (now_time - last_time);
            last_time = now_time;
            exp_benefit_A_demo.pos = [(- 0.35), (current_b_a[1] + (pos_step_size * time_delta))];
            exp_benefit_B_demo.pos = [0.35, (current_b_b[1] + (pos_step_size * time_delta))];
            exp_side_effect_A_demo.pos = [(- 0.35), (current_se_a[1] + (pos_step_size * time_delta))];
            exp_side_effect_B_demo.pos = [0.35, (current_se_b[1] + (pos_step_size * time_delta))];
            op = exp_benefit_A_demo.opacity;
            if ((op > 1)) {
                op = 1;
            }
            exp_benefit_A_demo.setOpacity((op + (opacity_step_size * time_delta)));
            exp_benefit_B_demo.setOpacity((op + (opacity_step_size * time_delta)));
            exp_side_effect_A_demo.setOpacity((op + (opacity_step_size * time_delta)));
            exp_side_effect_B_demo.setOpacity((op + (opacity_step_size * time_delta)));
            if ((exp_benefit_A_demo.pos[1] > 0.2)) {
                exp_benefit_A_demo.pos = [(- 0.35), 0.2];
            }
            if ((exp_benefit_B_demo.pos[1] > 0.2)) {
                exp_benefit_B_demo.pos = [0.35, 0.2];
            }
            if ((exp_side_effect_A_demo.pos[1] > 0.15)) {
                exp_side_effect_A_demo.pos = [(- 0.35), 0.15];
            }
            if ((exp_side_effect_B_demo.pos[1] > 0.15)) {
                exp_side_effect_B_demo.pos = [0.35, 0.15];
            }
        }
    CodeComponent handle_sampling_demo
      Code Type = Both
      Begin Experiment:
        import random
        import json
        import re


        beep = sound.Sound('stim/mouse_move.wav', secs=0.00001, hamming=False)
      Begin JS Routine:
        is_clicked = false;
        is_clicked_sample_A = false;
        is_clicked_sample_B = false;
        is_clicked_choose_A = false;
        was_clicked_choose_A = false;
        is_clicked_choose_B = false;
        was_clicked_choose_B = false;
        play_sound = false;
        show_b = false;
        show_a = false;
        show_a_b = false;
        show_a_se = false;
        nothing_shown_a = false;
        show_b_b = false;
        show_b_se = false;
        nothing_shown_b = false;

        a_where = Math.round(Math.random())
        if ((a_where === "l")) {
            problem = {"A": {"v_b": "leichte Bauchschmerzen", "p_b": Number.parseFloat(0.8), "v_se": "Schwindel", "p_se": Number.parseFloat(0.4)}, "B": {"v_b": "leichte Bauchschmerzen", "p_b": Number.parseFloat(0.7), "v_se": "Fieber", "p_se": Number.parseFloat(0.1)}};
        } else {
            problem = {"B": {"v_b": "leichte Bauchschmerzen", "p_b": Number.parseFloat(0.8), "v_se": "Schwindel", "p_se": Number.parseFloat(0.4)}, "A": {"v_b": "leichte Bauchschmerzen", "p_b": Number.parseFloat(0.7), "v_se": "Fieber", "p_se": Number.parseFloat(0.1)}};
        }


        exp_benefit_A_demo.setAutoDraw(false);
        exp_benefit_B_demo.setAutoDraw(false);
        exp_side_effect_A_demo.setAutoDraw(false);
        exp_side_effect_B_demo.setAutoDraw(false);
        exp_button_choose_A_demo.setAutoDraw(false);
        exp_button_choose_B_demo.setAutoDraw(false);

        exp_benefit_A_demo.setText(("Erfolg: " + problem["A"]["v_b"].toString()));
        exp_benefit_B_demo.setText(("Erfolg: " + problem["B"]["v_b"].toString()));
        exp_side_effect_A_demo.setText(("Nebenwirkung: " + problem["A"]["v_se"].toString()));
        exp_side_effect_B_demo.setText(("Nebenwirkung: " + problem["B"]["v_se"].toString()));
        clicks = [];
        click_timer = new util.Clock();
        beep = new sound.Sound({
          win: psychoJS.window,
          value: "stim/mouse_move.wav",
          secs: 0.00001});

        step1 = {"draw_choose": false, "step_nr": 1, "contin": "sa", "message": "Probieren Sie, die Box A anzuklicken, um das Medikament auszuprobieren!"};
        step2 = {"draw_choose": false, "step_nr": 2, "contin": "sa", "message": "Klicken Sie ein weiteres Mal auf Box A!"};
        step3 = {"draw_choose": false, "step_nr": 3, "contin": "sa", "message": "So k\u00f6nnen Sie die dahinterliegenden Wahrscheinlichkeiten herausbekommen.\nKlicken Sie nochmal auf Box A!"};
        step4 = {"draw_choose": false, "step_nr": 4, "contin": "sb", "message": "Sehr gut! Versuchen Sie jetzt auf Box B zu klicken, um dieses Medikament auszuprobieren!"};
        step5 = {"draw_choose": false, "step_nr": 5, "contin": "sb", "message": "Klicken Sie nochmal auf Box B!"};
        step6 = {"draw_choose": true, "step_nr": 6, "contin": "", "message": "Sie k\u00f6nnen noch so viel ausprobieren, wie Sie m\u00f6chten.\nWenn Sie bereit sind eine Entscheidung zu treffen, klicken Sie auf eine der 'W\u00e4hlen' Boxen.\nSie k\u00f6nnen den Ablauf dann nochmal an zwei Medikamentenpaaren ohne Hilfestellung ausprobieren."};
        steps = [step1, step2, step3, step4, step5, step6];
        steps.reverse();
        current_step = steps.pop();
        last_click = 0
        cooldown = .5
      Begin Routine:
        is_clicked= False
        is_clicked_sample_A = False
        is_clicked_sample_B = False
        is_clicked_choose_A = False
        was_clicked_choose_A = False
        is_clicked_choose_B = False
        was_clicked_choose_B = False
        play_sound = False
        show_a_b = False
        show_a_se = False
        nothing_shown_a = False
        show_b_b = False
        show_b_se = False
        nothing_shown_b = False

        a_where = random.choice(["l", "r"])

        if a_where == "l":
            problem = {
            "A": {
            "v_b": "leichte Bauchschmerzen", "p_b": float(.8),
            "v_se": "Schwindel", "p_se": float(.4)
            },
            "B": {
            "v_b": "leichte Bauchschmerzen", "p_b": float(.7),
            "v_se": "Fieber", "p_se": float(.1)
            }
            }
        else:
            problem = {
            "B": {
            "v_b": "leichte Bauchschmerzen", "p_b": float(.8),
            "v_se":"Schwindel", "p_se": float(.4)
            },
            "A": {
            "v_b": "leichte Bauchschmerzen", "p_b": float(.7),
            "v_se": "Fieber", "p_se": float(.1)
            }
            }


        show_b = False
        show_a = False

        exp_benefit_A_demo.setText("Erfolg: " + str(problem["A"]["v_b"]))
        exp_benefit_B_demo.setText("Erfolg: " + str(problem["B"]["v_b"]))
        exp_side_effect_A_demo.setText("Nebenwirkung: " + str(problem["A"]["v_se"]))
        exp_side_effect_B_demo.setText("Nebenwirkung: " + str(problem["B"]["v_se"]))

        clicks = []
        click_timer = core.Clock()


        last_click = 0
        cooldown = .5



        exp_benefit_A_demo.setAutoDraw(False)
        exp_benefit_B_demo.setAutoDraw(False)
        exp_side_effect_A_demo.setAutoDraw(False)
        exp_side_effect_B_demo.setAutoDraw(False)
        exp_button_choose_A_demo.setAutoDraw(False)
        exp_button_choose_B_demo.setAutoDraw(False)







        step1 = {
        "draw_choose": False,
        "step_nr": 1,
        "contin": "sa",
        "message": "Probieren Sie, die Box A anzuklicken, um das Medikament auszuprobieren!"
        }

        step2 = {"draw_choose": False,
        "step_nr": 2,
        "contin": "sa",
        "message": "Klicken Sie ein weiteres Mal auf Box A!"
        }

        step3 = {"draw_choose": False,
        "step_nr": 3,
        "contin": "sa",
        "message": "So können Sie die dahinterliegenden Wahrscheinlichkeiten herausbekommen.\nKlicken Sie nochmal auf Box A!"
        }

        step4 = {"draw_choose": False,
        "step_nr": 4,
        "contin": "sb",
        "message": "Sehr gut! Versuchen Sie jetzt auf Box B zu klicken, um dieses Medikament auszuprobieren!"
        }
        step5 = {"draw_choose": False,
        "step_nr": 5,
        "contin": "sb",
        "message": "Klicken Sie nochmal auf Box B!"
        }


        step6 = {"draw_choose": True,
        "step_nr": 6,
        "contin": "",
        "message": "Sie können noch so viel ausprobieren, wie Sie möchten.\nWenn Sie bereit sind eine Entscheidung zu treffen, klicken Sie auf eine der 'Wählen' Boxen.\nSie können den Ablauf dann nochmal an zwei Medikamentenpaaren ohne Hilfestellung ausprobieren."
        }


        steps = [step1, step2, step3, step4, step5, step6]
        steps.reverse()
        current_step = steps.pop()
      Each Frame:
        exp_benefit_A_demo.setAutoDraw(False)
        exp_benefit_B_demo.setAutoDraw(False)
        exp_side_effect_A_demo.setAutoDraw(False)
        exp_side_effect_B_demo.setAutoDraw(False)
        exp_button_choose_A_demo.setAutoDraw(False)
        exp_button_choose_B_demo.setAutoDraw(False)



        if exp_click_demo.isPressedIn(exp_med_a_box_demo) and click_timer.getTime() > last_click + cooldown:
            exp_med_a_box_demo.fillColor="grey"
            is_clicked_sample_A = True
            is_clicked = True
            last_click = click_timer.getTime()
        else:
            exp_med_a_box_demo.fillColor="white"
            is_clicked = False


        if exp_click_demo.isPressedIn(exp_med_b_box_demo) and click_timer.getTime() > last_click + cooldown:
            exp_med_b_box_demo.fillColor="grey"
            is_clicked_sample_B = True
            is_clicked = True
            last_click = click_timer.getTime()
        else:
            exp_med_b_box_demo.fillColor="white"
            is_clicked = False


        if exp_click_demo.isPressedIn(exp_button_choose_A) and click_timer.getTime() > last_click + cooldown:
            exp_button_choose_A.setImage("stim/button_choose_pressed.png")
            is_clicked = True
            is_clicked_choose_A = True
            was_clicked_choose_A =  True
            last_click = click_timer.getTime()
        else:
            exp_button_choose_A.setImage("stim/button_choose.png")
            is_clicked = False
            is_clicked_choose_A= False

        if exp_click_demo.isPressedIn(exp_button_choose_B) and click_timer.getTime() > last_click + cooldown:
            exp_button_choose_B.setImage("stim/button_choose_pressed.png")
            is_clicked = True
            is_clicked_choose_B = True
            was_clicked_choose_B = True
            last_click = click_timer.getTime()
        else:
            exp_button_choose_B.setImage("stim/button_choose.png")
            is_clicked = False
            is_clicked_choose_B = False



        # handle_sampling A
        if is_clicked_sample_A and not is_clicked and not exp_click_demo.isPressedIn(exp_med_a_box_demo):
            show_a_b = random.random() < problem["A"]["p_b"]
            show_a_se = random.random() < problem["A"]["p_se"]

            if current_step["step_nr"] == 1:
                show_a_se = True
            elif current_step["step_nr"] == 2:
                show_a_se = False
            if current_step["contin"] == "sa":
                current_step = steps.pop()

            if not show_a_b:
                exp_benefit_A_demo.setText("Keine erfolgreiche Behandlung")
                exp_benefit_A_demo.color = "black"
            else:
                exp_benefit_A_demo.setText("Behandlung erfolgreich")
                exp_benefit_A_demo.color = "green"



            if not show_a_se:
                exp_side_effect_A_demo.setText("Keine Nebenwirkung")
                exp_side_effect_A_demo.color = "black"
            else:
                exp_side_effect_A_demo.setText("Nebenwirkung: " + str(problem["A"]["v_se"]))
                exp_side_effect_A_demo.color = "red"

            show_b = False
            show_a = True
            show_b_b = False
            show_b_se = False
            nothing_shown_b = False
            is_clicked_sample_A = False
            restart_anim = True
            is_anim = True
            play_sound = True



        # handle_sampling B
        if is_clicked_sample_B and not is_clicked and not exp_click_demo.isPressedIn(exp_med_b_box_demo):
            show_b_b = random.random() < problem["B"]["p_b"]
            show_b_se = random.random() < problem["B"]["p_se"]
            if current_step["contin"] == "sb":
                current_step = steps.pop()
            if not show_b_b:
                exp_benefit_B_demo.setText("Keine erfolgreiche Behandlung")
                exp_benefit_B_demo.color = "black"
            else:
                exp_benefit_B_demo.setText("Behandlung erfolgreich")
                exp_benefit_B_demo.color = "green"

            if not show_b_se:
                exp_side_effect_B_demo.setText("Keine Nebenwirkung")
                exp_side_effect_B_demo.color = "black"
            else:
                exp_side_effect_B_demo.setText("Nebenwirkung: " + str(problem["B"]["v_se"]))
                exp_side_effect_B_demo.color = "red"



            show_b = True
            show_a = False
            show_a_b = False
            show_a_se = False
            nothing_shown_a = False
            is_clicked_sample_B = False
            restart_anim = True
            is_anim = True
            play_sound = True



        if play_sound:
            beep.play()
            play_sound = False

        if show_a:
            exp_benefit_A_demo.draw()
            exp_side_effect_A_demo.draw()

        if show_b:
            exp_benefit_B_demo.draw()
            exp_side_effect_B_demo.draw()

        exp_benefit_A_demo.setAutoDraw(False)
        exp_benefit_B_demo.setAutoDraw(False)
        exp_side_effect_A_demo.setAutoDraw(False)
        exp_side_effect_B_demo.setAutoDraw(False)
        exp_button_choose_A_demo.setAutoDraw(False)
        exp_button_choose_B_demo.setAutoDraw(False)

        if current_step["draw_choose"]:
            exp_button_choose_A_demo.setAutoDraw(True)
            exp_button_choose_B_demo.setAutoDraw(True)
        instruct_demo.setText(current_step["message"])





        if was_clicked_choose_A and not is_clicked_choose_A and not is_clicked:
            continueRoutine=False
            thisExp.addData("chosen_exp", "left")

        if was_clicked_choose_B and not is_clicked_choose_B and not is_clicked:
            continueRoutine=False
            thisExp.addData("chosen_exp", "right")
      Each JS Frame:
        exp_benefit_A_demo.setAutoDraw(false);
        exp_benefit_B_demo.setAutoDraw(false);
        exp_side_effect_A_demo.setAutoDraw(false);
        exp_side_effect_B_demo.setAutoDraw(false);
        exp_button_choose_A_demo.setAutoDraw(false);
        exp_button_choose_B_demo.setAutoDraw(false);




        if (exp_click_demo.isPressedIn(exp_med_a_box_demo) && click_timer.getTime() > last_click + cooldown) {
            exp_med_a_box_demo.fillColor = "grey";
            is_clicked_sample_A = true;
            is_clicked = true;
        } else {
            exp_med_a_box_demo.fillColor = "white";
            is_clicked = false;
        }
        if (exp_click_demo.isPressedIn(exp_med_b_box_demo) && click_timer.getTime() > last_click + cooldown) {
            exp_med_b_box_demo.fillColor = "grey";
            is_clicked_sample_B = true;
            is_clicked = true;
        } else {
            exp_med_b_box_demo.fillColor = "white";
            is_clicked = false;
        }
        if (exp_click_demo.isPressedIn(exp_button_choose_A_demo) && click_timer.getTime() > last_click + cooldown) {
            exp_button_choose_A_demo.setImage("stim/button_choose_pressed.png");
            is_clicked = true;
            is_clicked_choose_A = true;
            was_clicked_choose_A = true;
        } else {
            exp_button_choose_A_demo.setImage("stim/button_choose.png");
            is_clicked = false;
            is_clicked_choose_A = false;
        }
        if (exp_click_demo.isPressedIn(exp_button_choose_B_demo) && click_timer.getTime() > last_click + cooldown) {
            exp_button_choose_B_demo.setImage("stim/button_choose_pressed.png");
            is_clicked = true;
            is_clicked_choose_B = true;
            was_clicked_choose_B = true;
        } else {
            exp_button_choose_B_demo.setImage("stim/button_choose.png");
            is_clicked = false;
            is_clicked_choose_B = false;
        }


        if (exp_click_demo.isPressedIn(exp_med_a_box_demo) || exp_click_demo.isPressedIn(exp_med_b_box_demo) || exp_click_demo.isPressedIn(exp_button_choose_A_demo) || exp_click_demo.isPressedIn(exp_button_choose_B_demo) ) {

            is_clicked = true
            } else {
                is_clicked = false
                }


        if (((is_clicked_sample_A && (! is_clicked)) && (! exp_click_demo.isPressedIn(exp_med_a_box_demo)))) {
            show_a_b = (Math.random() < problem["A"]["p_b"]);
            show_a_se = (Math.random() < problem["A"]["p_se"]);
            if ((current_step["step_nr"] === 1)) {
              show_a_se = true;
          } else {
              if ((current_step["step_nr"] === 2)) {
                  show_a_se = false;
              }
          }
          if ((current_step["contin"] === "sa")) {
              current_step = steps.pop();
          }
            last_click = click_timer.getTime()

            if (!show_a_b) {

                exp_benefit_A_demo.setText("Keine erfolgreiche Behandlung")
                exp_benefit_A_demo.color = "black"

                 } else {

                exp_benefit_A_demo.setText("Behandlung erfolgreich")
                exp_benefit_A_demo.color = "green"

                    }

            if (!show_a_se) {
                exp_side_effect_A_demo.setText("Keine Nebenwirkung")
                exp_side_effect_A_demo.color = "black"
                } else {
                exp_side_effect_A_demo.setText(("Nebenwirkung: " + problem["A"]["v_se"].toString()))
                exp_side_effect_A_demo.color = "red"
                    }

            show_b = false
            show_a = true
            show_b_b = false;
            show_b_se = false;
            nothing_shown_b = false;
            is_clicked_sample_A = false;
            restart_anim = true;
            is_anim = true;
            play_sound = true;
            clicks.push({"which": "left", "time": click_timer.getTime(), "se_shown": show_a_se, "b_shown": show_a_b});
        }
        if (((is_clicked_sample_B && (! is_clicked)) && (! exp_click_demo.isPressedIn(exp_med_b_box_demo)))) {
            show_b_b = (Math.random() < problem["B"]["p_b"]);
            show_b_se = (Math.random() < problem["B"]["p_se"]);



            if ((current_step["contin"] === "sb")) {
              current_step = steps.pop();
          }

            last_click = click_timer.getTime()

            if (!show_b_b) {

                exp_benefit_B_demo.setText("Keine erfolgreiche Behandlung")
                exp_benefit_B_demo.color = "black"

                 } else {

                exp_benefit_B_demo.setText("Behandlung erfolgreich")
                exp_benefit_B_demo.color = "green"

                    }

            if (!show_b_se) {
                exp_side_effect_B_demo.setText("Keine Nebenwirkung")
                exp_side_effect_B_demo.color = "black"
                } else {
                exp_side_effect_B_demo.setText(("Nebenwirkung: " + problem["B"]["v_se"].toString()))
                exp_side_effect_B_demo.color = "red"
                    }



            show_b = true
            show_a = false
            show_a_b = false;
            show_a_se = false;
            nothing_shown_a = false;
            is_clicked_sample_B = false;
            restart_anim = true;
            is_anim = true;
            play_sound = true;
            clicks.push({"which": "right", "time": click_timer.getTime(), "se_shown": show_b_se, "b_shown": show_b_b});
        }
        if (play_sound) {
            beep.play(0);
            play_sound = false;
        }
        if (show_a) {
            exp_benefit_A_demo.draw();
            exp_side_effect_A_demo.draw();
        }

        if (show_b) {
            exp_benefit_B_demo.draw();
            exp_side_effect_B_demo.draw();
        }




        if (((was_clicked_choose_A && (! is_clicked_choose_A)) && (! is_clicked))) {
            continueRoutine = false;
        }
        if (((was_clicked_choose_B && (! is_clicked_choose_B)) && (! is_clicked))) {
            continueRoutine = false;
        }
        if (current_step["draw_choose"]) {
          exp_button_choose_A_demo.draw();
          exp_button_choose_B_demo.draw();
        }
        instruct_demo.setText(current_step["message"]);
    TextComponent label_what_treat_demo
      color = black
      letterHeight = 0.04
      pos = (0, .31)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $"Behandelt: " + "leichte Bauchschmerzen"
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    TextComponent instruct_demo
      color = green
      letterHeight = 0.023
      pos = (0, -.32)
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    CodeComponent skip_sample
      Code Type = Auto->JS
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      Each Frame:
        if propagate:
            continueRoutine = False
  Routine two_trials
  Routine instruct_small_text
  Routine skip_first_sampling
    CodeComponent skip_log
      Code Type = Auto->JS
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      Each Frame:
        if starts_with == "desc":
            continueRoutine= False
            propagate = True
        else:
            propagate = False
  Routine skip_instruct1
    CodeComponent skip_instruct_1_logic
      Code Type = Auto->JS
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      Each Frame:
        if propagate:
            sample_small_test.finished=True
            continueRoutne = False
  Routine skip_second_sampling
    CodeComponent skip_scnd_sample_log
      Code Type = Auto->JS
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      Each Frame:
        if starts_with == "desc":
            continueRoutine= False
            propagate = False
        else:
            propagate = True
            continueRoutine = False
  Routine skip_instruct2
    CodeComponent skip_instruct2_logic
      Code Type = Auto->JS
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      Each Frame:
        if propagate:
            continueRoutine = False
            instruct_sampling2.finished=True
  Routine sampling_instructions
    ImageComponent instruct_pic
      image [set every repeat] = $ipic
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent contin_instruct_sampling
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent skip_logic
      Code Type = Auto->JS
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      Each Frame:
        if propagate:
            continueRoutine = False
  Routine skip_instruct_1
    CodeComponent skip_i1_logic
      Code Type = Auto->JS
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      Each Frame:
        if propagate:
            continueRoutine = False
            sampling_instructions1.finished=True
  Routine skip_instruct2_2
  Routine after_sampling_instructs
    TextComponent text_after_sampling_instruct
      color = black
      letterHeight = 0.02
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Sehr gut!
        Sie sind jetzt bereit die Aufgabe zu starten. Sie werden insgesamt 60 Entscheidungen treffen.
        Drücken Sie die Leertaste, um mit der Aufgabe zu beginnen.
    CodeComponent skip_after
      Code Type = Auto->JS
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      Each Frame:
        if propagate:
            continueRoutine=False
    KeyboardComponent contin_after_s_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction_description
    ImageComponent pic_description
      image [set every repeat] = $ipic
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent contin_instr_description
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine welcome
    TextComponent welcome_text
      color = black
      letterHeight = 0.02
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Willkommen zu dem Experiment!
        Sie werden gleich zwei verschiedene Aufgaben durchführen - wie diese Aufgaben funktionieren, werden wir Ihnen im Verlaufe erklären.

        Möchten sie das Experiment abbrechen, drücken Sie bitte mehrfach die Escape-Taste. Der erste Druck beendet den Vollbildmodus, der zweite bricht das Experiment ab. Prolific wird dann eine Abbruch-Nachricht gesendet. Sie bekommen in diesem Fall kein Geld ausgezahlt.

        Das Experiment besteht aus zwei Aufgaben. Eine Aufgabe ist die "Deskriptionsaufgabe", die andere Aufgabe ist die "Erfahrungsaufgabe". Beide Aufgaben werden Ihnen zu Beginn erklärt. Die Reihenfolge, welche Aufgabe zuerst bearbeitet wird, ist zufällig.

         Drücken Sie jetzt die Leertaste, um mit der ersten Aufgabe zu beginnen.
    KeyboardComponent contin_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine first_task_done_a
    TextComponent first_task_done_a_text
      color = black
      letterHeight = 0.02
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Sie haben die erste Aufgabe geschafft. Nehmen Sie sich einen Moment Zeit um durchzuatmen und drücken Sie die Leertaste, um mit der zweiten Aufgabe zu beginnen.
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    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        if starts_with == "desc":
            continueRoutine = False
    KeyboardComponent first_task_done_a_contin
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine first_task_done_b
    TextComponent first_task_done_b_text
      color = black
      letterHeight = 0.02
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Sie haben die erste Aufgabe geschafft. Nehmen Sie sich einen Moment Zeit um durchzuatmen und drücken Sie die Leertaste, um mit der zweiten Aufgabe zu beginnen.
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    KeyboardComponent contin_first_task_done_b
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_2
      Code Type = Auto->JS
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      Each Frame:
        if starts_with != "desc":
            continueRoutine=False
  Routine all_tasks_done
    TextComponent all_tasks_done_text
      color = black
      letterHeight = 0.015
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Vielen Dank, die zweite Aufgabe ist jetzt vorbei. Zum Abschluss würden wir Sie noch bitten kurz uns Ihre Einschätzungen zu den Schmerzen und Nebenwirkungen zu geben, die Sie im Laufe des Experiments gesehen haben.
        Wir beginnen mit den Schmerzen: Stellen Sie sich vor, Sie würden unter dem jeweiligen Schmerz leiden - wie belasted wären Sie dadurch? Sie können mit einem Druck auf die Leertaste beginnen.
    KeyboardComponent contin_all_tasks_done
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruct_side_effects
    TextComponent instruct_side_effects_text
      color = black
      letterHeight = 0.015
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Vielen Dank! Zuletzt würden wir Sie noch einmal bitten, sich vorzustellen, eine Medikament einzunehmen, bei der eine der folgenden Nebenwirkungen auftritt. Wie belastet wären Sie, wenn Sie an dieser Nebenwirkung leiden würden? Sie können mit der Leertaste beginnen.
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    KeyboardComponent contin_rating_side_effects
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thx
    TextComponent thanks
      color = black
      letterHeight = 0.015
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Vielen Dank für die Teilnahme am Experiment!
        Mit der Leertaste können Sie dieses Fenster schließen - wir leiten Sie weiter zurück zu Prolific, nachdem die Daten korrekt gespeichert wurden.
    KeyboardComponent end_exp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent handle_forward
      Code Type = Auto->JS
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      Begin Routine:
        proid = expInfo["proid"]
        sessid = expInfo["sessid"]
        studid = expInfo["studid"]
  Routine tactics
    TextComponent text_task_done
      color = black
      letterHeight = 0.02
      pos = (0, .3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Vielen Dank, die Aufgabe ist vorbei!
        Wir würden Sie gerne einmal fragen, ob Sie bei der Lösung der Aufgabe eine bestimmte Heuristik/Technik verwendet haben. Haben Sie auf etwas Bestimmtes geachtet? Haben Sie etwas gar nicht beachtet?
        Tippen Sie Ihre Antwort im Fenster unten ein. Drücken Sie auf den "Weiter" Button, um Ihre Antwort zu speichern und fortzufahren.
        Die Beantwortung ist optional.
    TextboxComponent answer_tactics
      alignment = top-center
      bold = False
      borderColor = black
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.015
      pos = (0, -0.1)
      saveStartStop = False
      size = (.7, .4)
      startVal [time (s)] = 0.0
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    CodeComponent handle_flush
      Code Type = Auto->JS
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      Begin Routine:
        answer_tactics.pos = (0, -0.1)
      Each Frame:
        if propagate:
            continueRoutine=False
      End Routine:
        thisExp.addData("tactic", answer_tactics.text)
        answer_tactics.pos = (-10, -10)
    ButtonComponent button_contin_tactics
      bold = True
      borderColor = black
      forceEndRoutine = True
      letterHeight = 0.02
      pos = (0.2, -0.35)
      size = (0.2, 0.065)
      startVal [time (s)] = 0
      text = Weiter
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  Routine skip_instruct_samping_demo
    CodeComponent skip_demo2
      Code Type = Auto->JS
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      Each Frame:
        if propagate:
            continueRoutine = False
            instruct_sample_loop_2.finished = True
  Routine fix_prop
    CodeComponent fip
      Code Type = Auto->JS
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      Begin Routine:
        propagate=False
Flow
  Routine fix
  Routine prep
  Routine welcome
  Routine skip_first_sampling
  LoopInitiator sampling_instructions1 loopType="TrialHandler"
    conditionsFile = stim/sampling_instructions.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('ipic', 'instruct/instruct_sampling1.png')]),
      OrderedDict([('ipic', 'instruct/instruct_sampling2.png')]),
      OrderedDict([('ipic', 'instruct/instruct_sampling3.png')]),
      OrderedDict([('ipic', 'instruct/instruct_sampling4.png')]),
      OrderedDict([('ipic', 'instruct/instruct_sampling5.png')]),
      OrderedDict([('ipic', 'instruct/instruct_sampling6.png')])]
    Routine skip_instruct_1
    Routine sampling_instructions
  LoopTerminator sampling_instructions1
  Routine interactive_sampl_1
  Routine fix
  LoopInitiator sample_small_test loopType="TrialHandler"
    Selected rows = 1:3
    conditionsFile = stim/problem_set.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('a_benefit_v', 'leichte Kopfschmerzen'), ('a_benefit_p', 0.777), ('a_side_effect_v', 'Juckreiz'), ('a_side_effect_p', 0.141), ('b_benefit_v', 'leichte Kopfschmerzen'), ('b_benefit_p', 0.785), ('b_side_effect_v', 'Juckreiz'), ('b_side_effect_p', 0.052), ('EU_a', 2.049), ('EU_b', 2.251), ('EU_ratio', 0.910262105730786), ('ENG_a_side_effect_v', 'Itching'), ('ENG_b_side_effect_v', 'Itching'), ('ENG_a_benefit_v', 'mild head ache'), ('ENG_b_benefit_v', 'mild head ache'), ('id_of_problem', 1)]),
      OrderedDict([('a_benefit_v', 'leichte Rückenschmerzen'), ('a_benefit_p', 0.88), ('a_side_effect_v', 'Fieber'), ('a_side_effect_p', 0.114), ('b_benefit_v', 'leichte Rückenschmerzen'), ('b_benefit_p', 0.733), ('b_side_effect_v', 'Juckreiz'), ('b_side_effect_p', 0.178), ('EU_a', 1.304), ('EU_b', 1.11), ('EU_ratio', 1.17477477477477), ('ENG_a_side_effect_v', 'Fever'), ('ENG_b_side_effect_v', 'Itching'), ('ENG_a_benefit_v', 'mild back pain'), ('ENG_b_benefit_v', 'mild back pain'), ('id_of_problem', 2)]),
      OrderedDict([('a_benefit_v', 'schwere Halsschmerzen'), ('a_benefit_p', 0.68), ('a_side_effect_v', 'Blähungen'), ('a_side_effect_p', 0.251), ('b_benefit_v', 'schwere Halsschmerzen'), ('b_benefit_p', 0.614), ('b_side_effect_v', 'Gedächtnisverlust'), ('b_side_effect_p', 0.051), ('EU_a', 5.189), ('EU_b', 4.504), ('EU_ratio', 1.15208703374778), ('ENG_a_side_effect_v', 'Flatulence'), ('ENG_b_side_effect_v', 'Memory Loss'), ('ENG_a_benefit_v', 'severe sore throat'), ('ENG_b_benefit_v', 'severe sore throat'), ('id_of_problem', 3)]),
      OrderedDict([('a_benefit_v', 'leichte Kopfschmerzen'), ('a_benefit_p', 0.564), ('a_side_effect_v', 'Schlaflosigkeit'), ('a_side_effect_p', 0.07), ('b_benefit_v', 'leichte Kopfschmerzen'), ('b_benefit_p', 0.81), ('b_side_effect_v', 'Durchfall'), ('b_side_effect_p', 0.092), ('EU_a', 1.272), ('EU_b', 2.154), ('EU_ratio', 0.590529247910863), ('ENG_a_side_effect_v', 'Insomnia'), ('ENG_b_side_effect_v', 'Diarrea'), ('ENG_a_benefit_v', 'mild head ache'), ('ENG_b_benefit_v', 'mild head ache'), ('id_of_problem', 4)])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
    Routine skip_instruct1
    Routine sampling
    Routine fix
  LoopTerminator sample_small_test
  Routine after_sampling_instructs
  LoopInitiator sample_trial_loop loopType="TrialHandler"
    conditionsFile = stim/problem_set.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('a_benefit_v', 'leichte Kopfschmerzen'), ('a_benefit_p', 0.777), ('a_side_effect_v', 'Juckreiz'), ('a_side_effect_p', 0.141), ('b_benefit_v', 'leichte Kopfschmerzen'), ('b_benefit_p', 0.785), ('b_side_effect_v', 'Juckreiz'), ('b_side_effect_p', 0.052), ('EU_a', 2.049), ('EU_b', 2.251), ('EU_ratio', 0.910262105730786), ('ENG_a_side_effect_v', 'Itching'), ('ENG_b_side_effect_v', 'Itching'), ('ENG_a_benefit_v', 'mild head ache'), ('ENG_b_benefit_v', 'mild head ache')]),
      OrderedDict([('a_benefit_v', 'leichte Rückenschmerzen'), ('a_benefit_p', 0.88), ('a_side_effect_v', 'Fieber'), ('a_side_effect_p', 0.114), ('b_benefit_v', 'leichte Rückenschmerzen'), ('b_benefit_p', 0.733), ('b_side_effect_v', 'Juckreiz'), ('b_side_effect_p', 0.178), ('EU_a', 1.304), ('EU_b', 1.11), ('EU_ratio', 1.17477477477477), ('ENG_a_side_effect_v', 'Fever'), ('ENG_b_side_effect_v', 'Itching'), ('ENG_a_benefit_v', 'mild back pain'), ('ENG_b_benefit_v', 'mild back pain')]),
      OrderedDict([('a_benefit_v', 'schwere Halsschmerzen'), ('a_benefit_p', 0.68), ('a_side_effect_v', 'Blähungen'), ('a_side_effect_p', 0.251), ('b_benefit_v', 'schwere Halsschmerzen'), ('b_benefit_p', 0.614), ('b_side_effect_v', 'Gedächtnisverlust'), ('b_side_effect_p', 0.051), ('EU_a', 5.189), ('EU_b', 4.504), ('EU_ratio', 1.15208703374778), ('ENG_a_side_effect_v', 'Flatulence'), ('ENG_b_side_effect_v', 'Memory Loss'), ('ENG_a_benefit_v', 'severe sore throat'), ('ENG_b_benefit_v', 'severe sore throat')]),
      OrderedDict([('a_benefit_v', 'leichte Kopfschmerzen'), ('a_benefit_p', 0.564), ('a_side_effect_v', 'Schlaflosigkeit'), ('a_side_effect_p', 0.07), ('b_benefit_v', 'leichte Kopfschmerzen'), ('b_benefit_p', 0.81), ('b_side_effect_v', 'Durchfall'), ('b_side_effect_p', 0.092), ('EU_a', 1.272), ('EU_b', 2.154), ('EU_ratio', 0.590529247910863), ('ENG_a_side_effect_v', 'Insomnia'), ('ENG_b_side_effect_v', 'Diarrea'), ('ENG_a_benefit_v', 'mild head ache'), ('ENG_b_benefit_v', 'mild head ache')])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
    Routine skip1
    Routine sampling
    Routine fix
  LoopTerminator sample_trial_loop
  Routine tactics
  Routine first_task_done_a
  LoopInitiator description_instr_loop loopType="TrialHandler"
    conditionsFile = stim/description_instructions.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('ipic', 'instruct/instruct_description1.png')]),
      OrderedDict([('ipic', 'instruct/instruct_description2.png')]),
      OrderedDict([('ipic', 'instruct/instruct_description3.png')]),
      OrderedDict([('ipic', 'instruct/instruct_description4.png')])]
    Routine instruction_description
  LoopTerminator description_instr_loop
  LoopInitiator descr_trial_loop loopType="TrialHandler"
    conditionsFile = stim/problem_set.csv
    loopType = random
    nReps = 1
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    conditions:
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    Routine choose
    Routine fix
  LoopTerminator descr_trial_loop
  Routine fix_prop
  Routine fix
  Routine tactics
  Routine first_task_done_b
  Routine skip_second_sampling
  LoopInitiator instruct_sampling2 loopType="TrialHandler"
    conditionsFile = stim/sampling_instructions.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('ipic', 'instruct/instruct_sampling1.png')]),
      OrderedDict([('ipic', 'instruct/instruct_sampling2.png')]),
      OrderedDict([('ipic', 'instruct/instruct_sampling3.png')]),
      OrderedDict([('ipic', 'instruct/instruct_sampling4.png')]),
      OrderedDict([('ipic', 'instruct/instruct_sampling5.png')]),
      OrderedDict([('ipic', 'instruct/instruct_sampling6.png')])]
    Routine skip_instruct2
    Routine sampling_instructions
  LoopTerminator instruct_sampling2
  Routine interactive_sampl_1
  LoopInitiator instruct_sample_loop_2 loopType="TrialHandler"
    Selected rows = 1:3
    conditionsFile = stim/problem_set.csv
    loopType = random
    nReps = 1
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    conditions:
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    Routine skip_instruct_samping_demo
    Routine sampling
    Routine fix
  LoopTerminator instruct_sample_loop_2
  Routine after_sampling_instructs
  LoopInitiator sample_trial_loop_2 loopType="TrialHandler"
    conditionsFile = stim/problem_set.csv
    loopType = random
    nReps = 1
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    conditions:
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    Routine skip2
    Routine sampling
    Routine fix
  LoopTerminator sample_trial_loop_2
  Routine tactics
  Routine all_tasks_done
  LoopInitiator ill_rating_loop loopType="TrialHandler"
    conditionsFile = stim/final_pains.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('combined_symptom', 'leichte Halsschmerzen'), ('m', 1.85), ('sem', 0.3346246915733002), ('upper', 2.1846246915733003), ('lower', 1.5153753084267), ('intensity', 1), ('translation', 'mild sore throat')]),
      OrderedDict([('combined_symptom', 'leichte Rückenschmerzen'), ('m', 2.1), ('sem', 0.3546681176596093), ('upper', 2.454668117659609), ('lower', 1.7453318823403907), ('intensity', 2), ('translation', 'mild back pain')]),
      OrderedDict([('combined_symptom', 'leichte Kopfschmerzen'), ('m', 2.75), ('sem', 0.4222433820490387), ('upper', 3.1722433820490386), ('lower', 2.327756617950961), ('intensity', 3), ('translation', 'mild head ache')]),
      OrderedDict([('combined_symptom', 'mittlere Schmerzen im Brustkorb'), ('m', 4.25), ('sem', 0.3690314492374814), ('upper', 4.6190314492374815), ('lower', 3.8809685507625193), ('intensity', 4), ('translation', 'moderate chest pain')]),
      OrderedDict([('combined_symptom', 'mittlere Halsschmerzen'), ('m', 4.35), ('sem', 0.364727728298074), ('upper', 4.714727728298073), ('lower', 3.9852722717019256), ('intensity', 5), ('translation', 'moderate sore throat')]),
      OrderedDict([('combined_symptom', 'mittlere Rückenschmerzen'), ('m', 4.6), ('sem', 0.265567911821955), ('upper', 4.865567911821954), ('lower', 4.334432088178045), ('intensity', 6), ('translation', 'moderate back pain')])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
    Routine rate_illness
  LoopTerminator ill_rating_loop
  Routine fix
  Routine instruct_side_effects
  LoopInitiator se_rating_loop loopType="TrialHandler"
    conditionsFile = stim/final_side_effects.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('side_effect_text', 'Blähungen'), ('m', 2.65), ('sem', 0.4772453854095781), ('upper', 3.1272453854095783), ('lower', 2.172754614590421), ('translation', 'Flatulence'), ('intensity', 1)]),
      OrderedDict([('side_effect_text', 'Juckreiz'), ('m', 4.3), ('sem', 0.5286527066142065), ('upper', 4.828652706614206), ('lower', 3.7713472933857934), ('translation', 'Itching'), ('intensity', 2)]),
      OrderedDict([('side_effect_text', 'Durchfall'), ('m', 4.55), ('sem', 0.5102888758753273), ('upper', 5.060288875875327), ('lower', 4.039711124124673), ('translation', 'Diarrea'), ('intensity', 3)]),
      OrderedDict([('side_effect_text', 'Fieber'), ('m', 5.15), ('sem', 0.4604059993207368), ('upper', 5.610405999320737), ('lower', 4.689594000679263), ('translation', 'Fever'), ('intensity', 4)]),
      OrderedDict([('side_effect_text', 'Schwindel'), ('m', 5.45), ('sem', 0.4672145906157153), ('upper', 5.917214590615716), ('lower', 4.9827854093842845), ('translation', 'Dizziness'), ('intensity', 5)]),
      OrderedDict([('side_effect_text', 'Schlaflosigkeit'), ('m', 6.65), ('sem', 0.4604059993207368), ('upper', 7.110405999320737), ('lower', 6.189594000679263), ('translation', 'Insomnia'), ('intensity', 6)]),
      OrderedDict([('side_effect_text', 'Sprachstörungen'), ('m', 6.9), ('sem', 0.4285839597165481), ('upper', 7.328583959716548), ('lower', 6.471416040283453), ('translation', 'Speech Disorder'), ('intensity', 7)])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
    Routine rate_side_effects
  LoopTerminator se_rating_loop
  Routine thx
